PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = $"https://cualienartifactstask.azurewebsites.net?ID="+expInfo['participant']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Phone number last five*': '', 'Email*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['practice_stimuli/AT_example_1.png', 'practice_stimuli/AT_example_2.png', 'practice_stimuli/AT_example_3.png', 'practice_stimuli/AT_example_dec.png', 'practice_stimuli/CT_example_1.png', 'practice_stimuli/CT_example_2.png', 'practice_stimuli/CT_example_3.png', 'practice_stimuli/CT_example_dec.png', 'practice_stimuli/inst_dual-task.png', 'practice_stimuli/inst_ssst.png', 'practice_stimuli/inst_tom.png', 'practice_stimuli/PC_example_1.png', 'practice_stimuli/PC_example_2.png', 'practice_stimuli/PC_example_3.png', 'practice_stimuli/PC_example_dec.png', 'stimuli/AT1_1_Fixed.png', 'stimuli/AT1_2_Fixed.png', 'stimuli/AT1_3_Fixed.png', 'stimuli/AT1_dec.png', 'stimuli/AT2_1_Fixed.png', 'stimuli/AT2_2_Fixed.png', 'stimuli/AT2_3_Fixed.png', 'stimuli/AT2_dec.png', 'stimuli/AT3_1_Fixed.png', 'stimuli/AT3_2_Fixed.png', 'stimuli/AT3_3_Fixed.png', 'stimuli/AT3_dec.png', 'stimuli/AT4_1_Fixed.png', 'stimuli/AT4_2_Fixed.png', 'stimuli/AT4_3_Fixed.png', 'stimuli/AT4_dec.png', 'stimuli/AT5_1_Fixed.png', 'stimuli/AT5_2_Fixed.png', 'stimuli/AT5_3_Fixed.png', 'stimuli/AT5_dec.png', 'stimuli/AT6_1_Fixed.png', 'stimuli/AT6_2_Fixed.png', 'stimuli/AT6_3_Fixed.png', 'stimuli/AT6_dec.png', 'stimuli/AT7_1_Fixed.png', 'stimuli/AT7_2_Fixed.png', 'stimuli/AT7_3_Fixed.png', 'stimuli/AT7_dec.png', 'stimuli/AT8_1_Fixed.png', 'stimuli/AT8_2_Fixed.png', 'stimuli/AT8_3_Fixed.png', 'stimuli/AT8_dec.png', 'stimuli/AT9_1_Fixed.png', 'stimuli/AT9_2_Fixed.png', 'stimuli/AT9_3_Fixed.png', 'stimuli/AT9_dec.png', 'stimuli/AT10_1_Fixed.png', 'stimuli/AT10_2_Fixed.png', 'stimuli/AT10_3_Fixed.png', 'stimuli/AT10_dec.png', 'stimuli/CT1_1_Fixed.png', 'stimuli/CT1_2_Fixed.png', 'stimuli/CT1_3_Fixed.png', 'stimuli/CT1_dec.png', 'stimuli/CT2_1_Fixed.png', 'stimuli/CT2_2_Fixed.png', 'stimuli/CT2_3_Fixed.png', 'stimuli/CT2_dec.png', 'stimuli/CT3_1_Fixed.png', 'stimuli/CT3_2_Fixed.png', 'stimuli/CT3_3_Fixed.png', 'stimuli/CT3_dec.png', 'stimuli/CT4_1_Fixed.png', 'stimuli/CT4_2_Fixed.png', 'stimuli/CT4_3_Fixed.png', 'stimuli/CT4_dec.png', 'stimuli/CT5_1_Fixed.png', 'stimuli/CT5_2_Fixed.png', 'stimuli/CT5_3_Fixed.png', 'stimuli/CT5_dec.png', 'stimuli/CT6_1_Fixed.png', 'stimuli/CT6_2_Fixed.png', 'stimuli/CT6_3_Fixed.png', 'stimuli/CT6_dec.png', 'stimuli/CT7_1_Fixed.png', 'stimuli/CT7_2_Fixed.png', 'stimuli/CT7_3_Fixed.png', 'stimuli/CT7_dec.png', 'stimuli/CT8_1_Fixed.png', 'stimuli/CT8_2_Fixed.png', 'stimuli/CT8_3_Fixed.png', 'stimuli/CT8_dec.png', 'stimuli/CT9_1_Fixed.png', 'stimuli/CT9_2_Fixed.png', 'stimuli/CT9_3_Fixed.png', 'stimuli/CT9_dec.png', 'stimuli/CT10_1_Fixed.png', 'stimuli/CT10_2_Fixed.png', 'stimuli/CT10_3_Fixed.png', 'stimuli/CT10_dec.png', 'stimuli/PC1_1_Fixed.png', 'stimuli/PC1_2_Fixed.png', 'stimuli/PC1_3_Fixed.png', 'stimuli/PC1_dec.png', 'stimuli/PC2_1_Fixed.png', 'stimuli/PC2_2_Fixed.png', 'stimuli/PC2_3_Fixed.png', 'stimuli/PC2_dec.png', 'stimuli/PC3_1_Fixed.png', 'stimuli/PC3_2_Fixed.png', 'stimuli/PC3_3_Fixed.png', 'stimuli/PC3_dec.png', 'stimuli/PC4_1_Fixed.png', 'stimuli/PC4_2_Fixed.png', 'stimuli/PC4_3_Fixed.png', 'stimuli/PC4_dec.png', 'stimuli/PC5_1_Fixed.png', 'stimuli/PC5_2_Fixed.png', 'stimuli/PC5_3_Fixed.png', 'stimuli/PC5_dec.png', 'stimuli/PC6_1_Fixed.png', 'stimuli/PC6_2_Fixed.png', 'stimuli/PC6_3_Fixed.png', 'stimuli/PC6_dec.png', 'stimuli/PC7_1_Fixed.png', 'stimuli/PC7_2_Fixed.png', 'stimuli/PC7_3_Fixed.png', 'stimuli/PC7_dec.png', 'stimuli/PC8_1_Fixed.png', 'stimuli/PC8_2_Fixed.png', 'stimuli/PC8_3_Fixed.png', 'stimuli/PC8_dec.png', 'stimuli/PC9_1_Fixed.png', 'stimuli/PC9_2_Fixed.png', 'stimuli/PC9_3_Fixed.png', 'stimuli/PC9_dec.png', 'stimuli/PC10_1_Fixed.png', 'stimuli/PC10_2_Fixed.png', 'stimuli/PC10_3_Fixed.png', 'stimuli/PC10_dec.png', 'stimuli/ssst_cross.png', 'stimuli/ssst_go_arrow.png', 'stimuli/ssst_ignore.png', 'stimuli/ssst_stop.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = Dual-task
  keyboardBackend = ioHub
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Routines
  Routine tom_single_trial
    ImageComponent tom_s_1
      image [set every repeat] = $tom_img1
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent tom_s_2
      image [set every repeat] = $tom_img2
      size = (1, 1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    ImageComponent tom_s_3
      image [set every repeat] = $tom_img3
      size = (1, 1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
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    ImageComponent tom_s_dec
      image [set every repeat] = $tom_dec_img
      size = (1, 1)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 11.5
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    KeyboardComponent tom_s_resp
      allowedKeys = '1','2','3'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 11.5
      storeCorrect = True
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  Routine ITI_2000
    TextComponent tom_iti
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine tom_dual_1
    ImageComponent tom_d_1
      image [set every repeat] = $tom_img1
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine tom_dual_2
    ImageComponent tom_d_2
      image [set every repeat] = $tom_img2
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine tom_dual_3
    ImageComponent tom_d_3
      image [set every repeat] = $tom_img3
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine tom_dual_dec
    ImageComponent tom_choice
      image [set every repeat] = $tom_dec_img
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    KeyboardComponent tom_d_resp
      allowedKeys = '1','2','3'
      correctAns = $corr_resp_tom
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      storeCorrect = True
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  Routine welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Here you will play two games. But first, we will practice these games.

        During the practice you will recieve feedback on your responses but you will not during the actual game.

        After you complete the practices and tasks you will be given a link to complete the final part of the study.

        To continue press SPACEBAR.
    KeyboardComponent welcome_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine ssst_prac_inst
    TextComponent ssst_inst1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
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      text:
        Shapes game practice

        In this game, you will respond as fast as you can to a downward arrow by pressing the SPACEBAR with your RIGHT THUMB.
    TextComponent ssst_inst2
      letterHeight = 0.05
      startVal [time (s)] = 9
      stopVal [duration (s)] = 7
      text = As soon as you see a downward arrow press the SPACEBAR as fast as you can!
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    TextComponent ssst_inst3
      letterHeight = 0.05
      startVal [time (s)] = 16
      stopVal [duration (s)] = 7
      text = Other shapes may appear around the arrow - but do not pay attention to these only press the SPACEBAR as fast as you see a downward arrow
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    ImageComponent ssst_inst5
      image = practice_stimuli/inst_ssst_ctrl.png
      size = (1, 1)
      startVal [time (s)] = 23
      stopVal [duration (s)] = 14
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    TextComponent ssst_inst6
      letterHeight = 0.05
      startVal [time (s)] = 37
      stopVal [duration (s)] = 10
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      text:
        Remember to respond as fast as you can!

        Shapes game practice will start in 10 seconds or press SPACEBAR to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 37
      stopVal [duration (s)] = 10
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  Routine ssst_iti
    CodeComponent ssst_iti_draw
      Code Type = Auto->JS
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      Begin Routine:
        ITI_value = 1.5-(random())
    TextComponent ssst_iti_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_value
      text = +
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  Routine stop_sig
    CodeComponent ssst_staircase
      Code Type = Auto->JS
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      Begin Experiment:
        # setting parameters for staircase
        ssd = 0.15 # starts at 150ms
        stepsize = 0.05 # steps of 50ms
        minval = 0.05 # minimum value of 50ms for SSD
        maxval = 1.05 # maxSSD is 1050ms
      End Routine:
        thisExp.addData('trial_type', trial_type)
        thisExp.addData('ssd', ssd)
        thisExp.addData('ssst_resp', ssst_resp.keys)

        if trial_type == 'stop': # only adjust on stop trials
            #adjust the stepsize
            if ssst_resp.corr == 1:
                ssd += stepsize
            else:
                ssd -= stepsize

            # cap the stop time
            if ssd < minval:
                ssd = minval
            if ssd > maxval:
                ssd = maxval

        #print(ssd)
    ImageComponent ssst_go
      image [set every repeat] = $go_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ssd
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    ImageComponent ssst_stop
      image [set every repeat] = $st_img
      size = (0.5, 0.5)
      startVal [time (s)] = $ssd - 0.00001
      stopVal [duration (s)] = $1.25 - ssd
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    KeyboardComponent ssst_resp
      allowedKeys = 'space'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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  Routine prac_ssst_iti
    CodeComponent prac_ssst_iti_draw
      Code Type = Auto->JS
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      Before Experiment:
        msg = "do!"
      Begin Routine:
        if prac_ssst_resp.corr :#stored on last run routine
            msg="Correct!"
            color = "green"
        else:
            msg="Oops! That was wrong - SPACEBAR as soon as you see a downward arrow"
            color = "red"
    TextComponent prac_ssst_iti_cross
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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  Routine prac_ssst_trial
    CodeComponent prac_ssst_staircase
      Code Type = Auto->JS
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      Begin Experiment:
        # setting parameters for staircase
        ssd_prac = 0.15 # starts at 150ms
        stepsize = 0.05 # steps of 50ms
        minval = 0.05 # minimum value of 50ms for SSD
        maxval = 1.05 # maxSSD is 1050ms
      End Routine:
        thisExp.addData('trial_type', trial_type)
        thisExp.addData('ssd_prac', ssd_prac)
        thisExp.addData('prac_ssst_resp', prac_ssst_resp.keys)

        if trial_type == 'stop': # only adjust on stop trials
            #adjust the stepsize
            if prac_ssst_resp.corr == 1:
                ssd_prac += stepsize
            else:
                ssd_prac -= stepsize

            # cap the stop time
            if ssd_prac < minval:
                ssd_prac = minval
            if ssd_prac > maxval:
                ssd_prac = maxval
    ImageComponent prac_ssst_go
      image [set every repeat] = $go_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ssd
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    ImageComponent prac_ssst_stop
      image [set every repeat] = $st_img
      size = (0.5, 0.5)
      startVal [time (s)] = $ssd - 0.00001
      stopVal [duration (s)] = $1.25 - ssd
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    KeyboardComponent prac_ssst_resp
      allowedKeys = 'space'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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  Routine prac_tom_inst
    TextComponent tom_inst1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Cartoon game practice

        Here you will see three cartoon story scenes and it is up to you to decide the ending of these stories.
    TextComponent tom_inst1_2
      letterHeight = 0.05
      startVal [time (s)] = 7
      stopVal [duration (s)] = 7
      text = To solve these stories, you will have to try to take the perspective of the characters to decide the most possible ending. 
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    TextComponent tom_inst1_3
      letterHeight = 0.05
      startVal [time (s)] = 14
      stopVal [duration (s)] = 7
      text = There are no wrong or right solutions. We are interested in your thoughts on how the story might end, considering the characters’ feelings and thoughts.
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    TextComponent tom_inst2
      letterHeight = 0.05
      startVal [time (s)] = 21
      stopVal [duration (s)] = 7
      text = Your choices will be labeled 1, 2, and 3 and you will select your option by pressing 1, 2, or 3 at the top of your keyboard with your left hand. 
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    TextComponent tom_inst3
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 7
      text = DO NOT use numbers on the right of your keyboard ONLY USE the numbers at the top of your keyboard. 
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    ImageComponent tom_inst4
      image = practice_stimuli/inst_tom.png
      size = (1, 1)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 10
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    TextComponent tom_inst5
      letterHeight = 0.05
      startVal [time (s)] = 45
      stopVal [duration (s)] = 10
      text = Cartoon game practice will start in 10 seconds or press SPACEBAR
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    KeyboardComponent tom_inst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 45
      stopVal [duration (s)] = 10
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  Routine prac_tom_iti
    CodeComponent prac_tom_code
      Code Type = Auto->JS
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      Before Experiment:
        msg = 'do!'
      Begin Routine:
        if not prac_tom_resp.keys :
            msg="Failed to respond"
            color = "red"
        else:
            msg="Your reaction time was %.3f" %(round(prac_tom_resp.rt,3))
            color = "white"
    TextComponent prac_tom_fb
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg
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  Routine prac_tom_trial
    ImageComponent prac_tom1
      image [set every repeat] = $prac_img1
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent prac_tom2
      image [set every repeat] = $prac_img2
      size = (1, 1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    ImageComponent prac_tom3
      image [set every repeat] = $prac_img3
      size = (1, 1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
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    ImageComponent prac_tom_dec
      image [set every repeat] = $prac_dec_img
      size = (1, 1)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 7
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    KeyboardComponent prac_tom_resp
      allowedKeys = '1','2','3'
      correctAns = $corr_resp_tom_prac
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 7
      storeCorrect = True
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  Routine real_task_inst
    TextComponent trial_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Rest for 15 seconds - we will start the study next.

        Please place you left and right hands on the keyboard as instructred.

        Remember, if you respond to > 90% of the trials you will recieve an additional 10 dollars, so respond as quickly and as accurately as you can.

        You will no longer recieve feedback about your response.
    TextComponent trial_inst2
      letterHeight = 0.05
      startVal [time (s)] = 15
      text = Press SPACEBAR to start to start the task
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    KeyboardComponent trial_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine prac_dual_inst
    TextComponent dual_inst1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Combined Game Practice

        Here you will be asked to play both games at the same time
    TextComponent dual_inst2
      letterHeight = 0.05
      startVal [time (s)] = 7
      stopVal [duration (s)] = 7
      text = You will use the same buttons as the prior games, but you will use all of them in this combined game.
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    TextComponent dual_inst3
      letterHeight = 0.05
      startVal [time (s)] = 14
      stopVal [duration (s)] = 7
      text = Please place your both of your hands on the left and right sides of the keyboard to play the combined game.
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    ImageComponent dual_inst4
      image = practice_stimuli/inst_dual-task_ctrl.png
      size = (1, 1)
      startVal [time (s)] = 21
      stopVal [duration (s)] = 10
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    TextComponent dial_inst5
      letterHeight = 0.05
      startVal [time (s)] = 31
      stopVal [duration (s)] = 8
      text = Combined game practice will start in 10 seconds or press SPACEBAR. 
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    KeyboardComponent dual_inst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 31
      stopVal [duration (s)] = 8
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  Routine prac_dual_tom1
    ImageComponent prac_d_tom1
      image [set every repeat] = $prac_img1
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine prac_dual_tom2
    ImageComponent prac_d_tom2
      image [set every repeat] = $prac_img2
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine prac_dual_tom3
    ImageComponent prac_d_tom3
      image [set every repeat] = $prac_img3
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine prac_dual_tom_dec
    ImageComponent prac_d_tom_choice
      image [set every repeat] = $prac_dec_img
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
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    KeyboardComponent prac_d_tom_resp
      allowedKeys = '1','2','3'
      correctAns = $corr_resp_dual_prac
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      storeCorrect = True
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  Routine prac_d_tom_iti
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        msg= "do!"
      Begin Routine:
        if not prac_d_tom_resp.keys :
            msg="Failed to respond"
        else:
            msg= "Reaction Time =%.3f" %(round(prac_d_tom_resp.rt,3))
    TextComponent prac_d_tom_fb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg
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  Routine tom_intro
    TextComponent tom_task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will play the cartoon game.

        press SPACEBAR
    KeyboardComponent tom_int_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dual_intro
    TextComponent dual_task_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will play the combination game.

        Remember to respond as fast as you can!

        press SPACEBAR
    KeyboardComponent dual_task_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine outro
    TextComponent outro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Contrats on completing the first portion of the study!

        After leaving the next page you will be asked to press ok with your mouse which will immediately take you to the next portion of the study.

        Remember the last 5 digits of your phone number and the email you registered with so that you can enter the next part of the study.
    TextComponent outro_text2
      letterHeight = 0.05
      startVal [time (s)] = 7
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      text:
        Again you will need the last 5 digits of your phone number and the email you registered with so to enter the next part of the study.

        Press SPACEBAR to go to end this part the study and wait until a box appears that asks you to click ok with your mouse.
    KeyboardComponent outro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 7
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  Routine rest
    TextComponent rest_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Take a 15 second break before the next task.
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    TextComponent rest_15_2
      letterHeight = 0.05
      startVal [time (s)] = 15
      text = Press SPACEBAR to continue. 
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    KeyboardComponent rest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine dual_iti
    CodeComponent dual_iti_code
      Code Type = Auto->JS
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      Begin Routine:
        dual_iti = 2.5-(random())
    TextComponent dual_iti_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dual_iti
      text = +
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Flow
  Routine welcome
  Routine ssst_prac_inst
  LoopInitiator prac_ssst loopType="TrialHandler"
    conditionsFile = conditions/ssst_go_stop.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
      {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
      {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
      {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_ignore.png', 'corr_resp': 'space', 'trial_type': 'ignore'},
      {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_stop.png', 'corr_resp': 'space', 'trial_type': 'stop'}]
    Routine prac_ssst_trial
    Routine prac_ssst_iti
  LoopTerminator prac_ssst
  Routine prac_tom_inst
  LoopInitiator prac_tom loopType="TrialHandler"
    conditionsFile = conditions/prac_tom_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prac_img1': 'practice_stimuli/AT_example_1.png', 'prac_img2': 'practice_stimuli/AT_example_2.png', 'prac_img3': 'practice_stimuli/AT_example_3.png', 'prac_dec_img': 'practice_stimuli/AT_example_dec.png', 'corr_resp': 3},
      {'prac_img1': 'practice_stimuli/CT_example_1.png', 'prac_img2': 'practice_stimuli/CT_example_2.png', 'prac_img3': 'practice_stimuli/CT_example_3.png', 'prac_dec_img': 'practice_stimuli/CT_example_dec.png', 'corr_resp': 2},
      {'prac_img1': 'practice_stimuli/PC_example_1.png', 'prac_img2': 'practice_stimuli/PC_example_2.png', 'prac_img3': 'practice_stimuli/PC_example_3.png', 'prac_dec_img': 'practice_stimuli/PC_example_dec.png', 'corr_resp': 1}]
    Routine prac_tom_trial
    Routine prac_tom_iti
  LoopTerminator prac_tom
  Routine prac_dual_inst
  LoopInitiator prac_dual loopType="TrialHandler"
    conditions = [{'prac_img1': 'practice_stimuli/CT_example_1.png', 'prac_img2': 'practice_stimuli/CT_example_2.png', 'prac_img3': 'practice_stimuli/CT_example_3.png', 'prac_dec_img': 'practice_stimuli/CT_example_dec.png', 'corr_resp': 2}]
    conditionsFile = conditions/prac_dual_tom_cond.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator prac_dual_ssst1 loopType="TrialHandler"
      conditionsFile = conditions/ssst_go_stop.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_ignore.png', 'corr_resp': 'None', 'trial_type': 'ignore'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_stop.png', 'corr_resp': 'k', 'trial_type': 'stop'}]
      Routine prac_ssst_trial
      Routine prac_ssst_iti
    LoopTerminator prac_dual_ssst1
    Routine prac_dual_tom1
    LoopInitiator prac_dual_ssst2 loopType="TrialHandler"
      conditionsFile = conditions/ssst_go_stop.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_ignore.png', 'corr_resp': 'None', 'trial_type': 'ignore'},
        {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_stop.png', 'corr_resp': 'k', 'trial_type': 'stop'}]
      Routine prac_ssst_trial
      Routine prac_ssst_iti
    LoopTerminator prac_dual_ssst2
    Routine prac_dual_tom2
    LoopInitiator prac_dual_ssst3 loopType="TrialHandler"
      conditionsFile = conditions/ssst_go_stop.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine prac_ssst_trial
      Routine prac_ssst_iti
    LoopTerminator prac_dual_ssst3
    Routine prac_dual_tom3
    Routine prac_dual_tom_dec
    Routine prac_d_tom_iti
  LoopTerminator prac_dual
  Routine real_task_inst
  LoopInitiator dual_block loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine dual_intro
    LoopInitiator dual_task loopType="TrialHandler"
      conditionsFile = conditions/tom_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'tom_img1': 'stimuli/AT1_1_Fixed.png', 'tom_img2': 'stimuli/AT1_2_Fixed.png', 'tom_img3': 'stimuli/AT1_3_Fixed.png', 'tom_dec_img': 'stimuli/AT1_dec.png', 'corr_resp': 3},
        {'tom_img1': 'stimuli/AT2_1_Fixed.png', 'tom_img2': 'stimuli/AT2_2_Fixed.png', 'tom_img3': 'stimuli/AT2_3_Fixed.png', 'tom_dec_img': 'stimuli/AT2_dec.png', 'corr_resp': 3},
        {'tom_img1': 'stimuli/AT3_1_Fixed.png', 'tom_img2': 'stimuli/AT3_2_Fixed.png', 'tom_img3': 'stimuli/AT3_3_Fixed.png', 'tom_dec_img': 'stimuli/AT3_dec.png', 'corr_resp': 3},
        {'tom_img1': 'stimuli/AT4_1_Fixed.png', 'tom_img2': 'stimuli/AT4_2_Fixed.png', 'tom_img3': 'stimuli/AT4_3_Fixed.png', 'tom_dec_img': 'stimuli/AT4_dec.png', 'corr_resp': 3},
        {'tom_img1': 'stimuli/AT5_1_Fixed.png', 'tom_img2': 'stimuli/AT5_2_Fixed.png', 'tom_img3': 'stimuli/AT5_3_Fixed.png', 'tom_dec_img': 'stimuli/AT5_dec.png', 'corr_resp': 2},
        {'tom_img1': 'stimuli/AT6_1_Fixed.png', 'tom_img2': 'stimuli/AT6_2_Fixed.png', 'tom_img3': 'stimuli/AT6_3_Fixed.png', 'tom_dec_img': 'stimuli/AT6_dec.png', 'corr_resp': 2},
        {'tom_img1': 'stimuli/AT7_1_Fixed.png', 'tom_img2': 'stimuli/AT7_2_Fixed.png', 'tom_img3': 'stimuli/AT7_3_Fixed.png', 'tom_dec_img': 'stimuli/AT7_dec.png', 'corr_resp': 1},
        {'tom_img1': 'stimuli/AT8_1_Fixed.png', 'tom_img2': 'stimuli/AT8_2_Fixed.png', 'tom_img3': 'stimuli/AT8_3_Fixed.png', 'tom_dec_img': 'stimuli/AT8_dec.png', 'corr_resp': 2}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
      Routine dual_iti
      LoopInitiator ssst_loop1 loopType="TrialHandler"
        conditionsFile = conditions/ssst_go_stop.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_ignore.png', 'corr_resp': 'space', 'trial_type': 'ignore'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_stop.png', 'corr_resp': 'space', 'trial_type': 'stop'}]
        Routine ssst_iti
        Routine stop_sig
      LoopTerminator ssst_loop1
      Routine tom_dual_1
      LoopInitiator ssst_loop2 loopType="TrialHandler"
        conditionsFile = conditions/ssst_go_stop.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_ignore.png', 'corr_resp': None, 'trial_type': 'ignore'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_stop.png', 'corr_resp': 'k', 'trial_type': 'stop'}]
        Routine ssst_iti
        Routine stop_sig
      LoopTerminator ssst_loop2
      Routine tom_dual_2
      LoopInitiator ssst_loop3 loopType="TrialHandler"
        conditionsFile = conditions/ssst_go_stop.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_go_arrow.png', 'corr_resp': 'space', 'trial_type': 'go'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_ignore.png', 'corr_resp': None, 'trial_type': 'ignore'},
          {'go_img': 'stimuli/ssst_go_arrow.png', 'st_img': 'stimuli/ssst_stop.png', 'corr_resp': 'k', 'trial_type': 'stop'}]
        Routine ssst_iti
        Routine stop_sig
      LoopTerminator ssst_loop3
      Routine tom_dual_3
      Routine tom_dual_dec
    LoopTerminator dual_task
  LoopTerminator dual_block
  Routine rest
  LoopInitiator tom_block1 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine tom_intro
    LoopInitiator tom_single1 loopType="TrialHandler"
      conditionsFile = conditions/tom_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'tom_img1': 'stimuli/AT1_1_Fixed.png', 'tom_img2': 'stimuli/AT1_2_Fixed.png', 'tom_img3': 'stimuli/AT1_3_Fixed.png', 'tom_dec_img': 'stimuli/AT1_dec.png', 'corr_resp_tom': 3},
        {'tom_img1': 'stimuli/AT2_1_Fixed.png', 'tom_img2': 'stimuli/AT2_2_Fixed.png', 'tom_img3': 'stimuli/AT2_3_Fixed.png', 'tom_dec_img': 'stimuli/AT2_dec.png', 'corr_resp_tom': 3},
        {'tom_img1': 'stimuli/AT3_1_Fixed.png', 'tom_img2': 'stimuli/AT3_2_Fixed.png', 'tom_img3': 'stimuli/AT3_3_Fixed.png', 'tom_dec_img': 'stimuli/AT3_dec.png', 'corr_resp_tom': 3},
        {'tom_img1': 'stimuli/AT4_1_Fixed.png', 'tom_img2': 'stimuli/AT4_2_Fixed.png', 'tom_img3': 'stimuli/AT4_3_Fixed.png', 'tom_dec_img': 'stimuli/AT4_dec.png', 'corr_resp_tom': 3},
        {'tom_img1': 'stimuli/AT5_1_Fixed.png', 'tom_img2': 'stimuli/AT5_2_Fixed.png', 'tom_img3': 'stimuli/AT5_3_Fixed.png', 'tom_dec_img': 'stimuli/AT5_dec.png', 'corr_resp_tom': 2},
        {'tom_img1': 'stimuli/AT6_1_Fixed.png', 'tom_img2': 'stimuli/AT6_2_Fixed.png', 'tom_img3': 'stimuli/AT6_3_Fixed.png', 'tom_dec_img': 'stimuli/AT6_dec.png', 'corr_resp_tom': 2},
        {'tom_img1': 'stimuli/AT7_1_Fixed.png', 'tom_img2': 'stimuli/AT7_2_Fixed.png', 'tom_img3': 'stimuli/AT7_3_Fixed.png', 'tom_dec_img': 'stimuli/AT7_dec.png', 'corr_resp_tom': 1},
        {'tom_img1': 'stimuli/AT8_1_Fixed.png', 'tom_img2': 'stimuli/AT8_2_Fixed.png', 'tom_img3': 'stimuli/AT8_3_Fixed.png', 'tom_dec_img': 'stimuli/AT8_dec.png', 'corr_resp_tom': 2}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
      Routine tom_single_trial
      Routine ITI_2000
    LoopTerminator tom_single1
  LoopTerminator tom_block1
  Routine outro
